//J. Berzhanskaya 2D network model of CA1  OPB//
// with full 3D P cell morphology and reduced O and B cells //
// Neuron 5.7, 2007-2009//
//Neuron 7.0 2012//
//Variables//



create acell_home_
  access acell_home_

proc model_globals(){
	// External Stimulus Properties
	pw=2000		//msec//
	delay=10 	//msec//
	//rhoa=100 	//Ohm-cm//
rho = 35.4 //excres

	// Internal Current Clamp
// do not change. this vlaue used in mult cells
	Istim=0   	//nA//	//.26
	intpw=2000	//ms//
	intdel=50	//ms//	//600

	tstop=1300	//msec//
	dt=0.025	//msec//

	celsius=35	//degC//
	spacer = .01 //Lambda space constant multiplier//

	mult1 = 1	//Channel density in linear region (slope od density line)
	mult2 = 1	//Overall channel density (effects all sections of cell equally)
	
//julia hchannel
     // ghd=0.00005  
//back
	lineardist = 0	//Used to show which type of channel distribution is active
	uniformdist = 0
	pasonly = 1

stimtypenosource =1
	stimtypefield = 0
	stimtypepoint = 0
	stimtypeline = 0


	//Uniform Field
	efield=-30	//mV/mm//
	theta=0.0	//radians//

// IClamp globals
Istim0=0.23		//nA// was 0.05 for other than 1 cluster

	Istim1=0.20		//nA// was 0.07
        Istim2=0.22		//nA// was 0.08
        Istim3=0.21		//nA// was 0.05

//Ostim1=0.009
//Ostim2=0.008
//Ostim3=0.009
//OStim1=0.010
//OStim2=0.009
//OStim3=0.010
OStim1=0.011
OStim2=0.010
OStim3=0.011



//Channel Parameters and Variables//

mid=12
//dist=27
secondorder=2
FARADAY=96520
PI=3.14159

//Membrane Resistance

Rm = 28000
RmDend = Rm/2 //XS 
RmSoma = Rm

//Membrane Capacitance

Cm    = 1
CmSoma= Cm
CmDend = Cm*2 //XS 


														
//Axial Resistance

RaAll= 150 //XS 
RaSoma=150  

RaAll= 80 //XS 
RaSoma=80  


//Parameters

Vrest = -65
gna =  .02
gkdr = 0.01


KMULT =  0.025
KMULTP = 0.025
//julia synapse
totSyn=10
totSyn=30



TAU1=0.5
TAU2=5
ndend=196

}
//end globals

model_globals()
numelements=ndend+1		//Total objects, dendrites + soma

Nel=10
Tsteps=6000
ncells=20

objref fname1, fname2, datafile
objref rxobj 
objref rc, rc1, rc2, rc3, rc4, wts1 
rxobj = new Matrix(numelements,Nel)


//to hold external rec matrix at the current time step
objref vrecMat, vrecMat2, vrecVec[ncells]

vrecMat = new Matrix(Tsteps, Nel)
vrecMat2 = new Matrix(Tsteps, Nel)

for i=0,ncells-1{
vrecVec[i] = new Vector(Nel)
}


objref Ens[totSyn], syn[totSyn], nc[totSyn] // julia_XX synapse
objref Ens2[totSyn], syn2[totSyn], nc2[totSyn] 

// elctrode matrix
objref xcEl
objref ycEl
objref zcEl
xcEl = new Vector(Nel)
ycEl = new Vector(Nel)
zcEl = new Vector(Nel)


XE = 50  
YE = 0
ZE = 0

create electrode

objectvar intstim
objref exIClmp1
objref mobj			//extracellular voltage
objref xobj			//x coords
objref yobj			//y coords
objref zobj			//z coords
objref vobj			//number of segments in each branch
objref vectype		//Apical or basal
totSyn=10
totSyn=30

//objref Ens[totSyn], syn[totSyn], nc[totSyn] // julia_XX synapse
//objref Ens2[totSyn], syn2[totSyn], nc2[totSyn] 
double  synWt[totSyn]                       //julia_XXweight



numelements=ndend+1		//Total objects, dendrites + soma



begintemplate Cell_Cell

// Cell_Cell is P-cell

public is_art
public init, topol, basic_shape, subsets, geom, biophys, setrxRec, setRecMat
public synlist, x, y, z, position, connect2target, rxobj
public fieldrec1, fieldrec, maxn3d , pasinit
public fieldextstimulus, noextstimulus
public wts1
//totSyn=90
totSyn=30
ndend=196
numelements=ndend+1		//Total objects, dendrites + soma
Nel=10
Tsteps=6000
//efield=-30	//mV/mm//
theta=0.0 //rad
XE = 50  
YE = 0
ZE = 0


objref Ens, syn, nc // julia_XX synapse
objref Ens2, syn2, nc2 
objref Ens[totSyn], syn[totSyn], nc[totSyn] // julia_XX synapse
objref Ens2[totSyn], syn2[totSyn], nc2[totSyn] 
objref exIClmp1
objref r
objref xcEl
objref ycEl
objref zcEl
xcEl = new Vector(Nel)
ycEl = new Vector(Nel)
zcEl = new Vector(Nel)
for n=0,Nel-1 {
xcEl.x[n]=XE
zcEl.x[n]=ZE
ycEl.x[n]=YE
               }

               //objref wts1

public soma, dendTot, dendrite, apical_dendrite, user5
public all, SecList2


TWO_THIRD_APIDIST = 350 
USER5MAX = 76
APIDENDMAX = 74
BASDENDMAX = 43
TOTALDEND = USER5MAX + APIDENDMAX + BASDENDMAX + 3 //"3": counting start at 0

objref rc, rc1, rc2, rc3, rc4 //Random gen
objref synlist, syn_

proc init() {

  topol()
  subsets()
  geom()
  biophys()
  geom_nseg()
  maxn3d()
  synlist = new List()

  x = y = z = 0 // only change via position
}

create soma
create dendrite[44]//basal dendrite
create apical_dendrite[75]
create user5[77]
objref dendTot[196]
objref vobj, xobj,yobj, zobj, mobj, r, rxobj




//Quadratic_fitting_results_Type_I_model (Li, Ascoli):	
A0 = 0.00611126
B0 = 82.5413

A= A0
B= B0



// morphology to be loaded from the file
proc topol() { 
{soma connect dendrite[0](0), 1}
{dendrite[0] connect dendrite[1](0), 1}
{dendrite[0] connect dendrite[2](0), 1}
{dendrite[2] connect dendrite[3](0), 1}
{dendrite[2] connect dendrite[4](0), 1}
{soma connect dendrite[5](0), 1}
{dendrite[5] connect dendrite[6](0), 1}
{dendrite[6] connect dendrite[7](0), 1}
{dendrite[6] connect dendrite[8](0), 1}
{dendrite[5] connect dendrite[9](0), 1}
{dendrite[9] connect dendrite[10](0), 1}
{dendrite[10] connect dendrite[11](0), 1}
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

  basic_shape()
}

proc shape3d_1() {
  {access soma}
{pt3dclear()}
{pt3dadd(0,0,10.68,10.68)}
{pt3dadd(0,0,0,10.68)}


{access dendrite[0]}
{pt3dclear()}
{pt3dadd(0,0,0,10.68)}
{pt3dadd(2.458,-2.766,6.198,0.3)}
{pt3dadd(5.462,-3.319,10.662,0.3)}
{pt3dadd(11.368,-7.68,13.372,0.3)}
{pt3dadd(15.732,-11.81,21.014,0.3)}
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{pt3dadd(8.422,-35.597,6.97,0.3)}
}


proc shape3d_2() {
  {access dendrite[19]}
{pt3dclear()}
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{pt3dadd(68.097,-165.688,128.319,0.3)}


}
proc shape3d_3() {
  
{access dendrite[30]}
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{pt3dadd(-53.521,-191.559,-79.03,0.3)}
}
proc shape3d_4() {
  {access user5[0]}
{pt3dclear()}
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{pt3dadd(87.94,521.246,-112.667,0.3)}
}
proc shape3d_5() {
 
{access user5[18]}
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{pt3dadd(8.851,219.201,-49.942,0.3)}
}

proc shape3d_6() {
{access apical_dendrite[2]}
{pt3dclear()}
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{pt3dadd(-17.166,30.946,-104.13,0.3)}
}
proc shape3d_7() {
  {access apical_dendrite[18]}
{pt3dclear()}
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{pt3dadd(3.826,172.458,-51.394,0.6)}
}
proc shape3d_8() {
{access user5[35]}
{pt3dclear()}
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{pt3dadd(-36.781,125.93,-120.508,0.4)}
}
proc shape3d_9() {
  {access apical_dendrite[37]}
{pt3dclear()}
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{pt3dadd(-30.698,430.812,122.517,0.3)}
}
proc shape3d_10() {
{access user5[65]}
{pt3dclear()}
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{pt3dadd(6.247,541.674,35.476,0.3)}


}
proc shape3d_11() {
{access user5[72]}
{pt3dclear()}
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{pt3dadd(-0.645,302.523,119.288,0.3)}
}
proc shape3d_12() {
{access apical_dendrite[50]}
{pt3dclear()}
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{pt3dadd(43.225,177.316,55.497,0.3)}
}
proc shape3d_13() {
{access apical_dendrite[67]}
{pt3dclear()}
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{pt3dadd(58.426,139.418,104.261,0.3)}
}
proc basic_shape() {
  shape3d_1()
  shape3d_2()
  shape3d_3()
  shape3d_4()
  shape3d_5()
  shape3d_6()
  shape3d_7()
  shape3d_8()
  shape3d_9()
  shape3d_10()
  shape3d_11()
  shape3d_12()
  shape3d_13()

}

objref all

proc subsets() { local i
  objref all
  all = new SectionList()
    soma all.append()
    for i=0, 76 user5[i] all.append()
    for i=0, 74 apical_dendrite[i] all.append()
for i=0, 43 dendrite[i] all.append()



TOTALDEND = USER5MAX + APIDENDMAX + BASDENDMAX + 3 //"3": counting start at 0

index = 0

forsec "dendrite" { //this will includes both dendrites and apical-dendrites
  dendTot[index] = new SectionRef()
   index += 1
}

}

proc geom() {
  forsec all {  }
 
}
proc geom_nseg() {
  soma area(.5) // make sure diam reflects 3d points
   forsec all { nseg = 3  }
//forsec all { nseg = 9  }
 
}

proc biophys() {

distance()

  forsec all {
//print secname()
Rm= 28000
gpas =1/Rm
Ra = 80 
    cm = 1
Vrest=-65

celsius = 35.0  

KMULT =  0.025
KMULTP = 0.025

mult1 = 1		
mult2 = 1	
gna=0.02  
gkdr = 0.01 
gkap= 0.025  

gkad=0.025 

ghd=0.00005 
nash=0


      insert hd
      ghdbar_hd = ghd      vhalfl_hd = -73
    
    insert kad
        gkabar_kad = 0

         
    insert kap
     
        gkabar_kap = 0

    insert kdr
      gkdrbar_kdr = gkdr 
    insert na3
      gbar_na3 = gna
      ar2_na3 = 1

      sh_na3=nash
    insert pas
      g_pas = gpas
      e_pas = Vrest
insert extracellular								
			insert xtra
mult1=1

for (x){ xdist = distance(x)

gkabar_kap(x)=gkap

//apical linear increase
		if ( xdist > 0 && xdist <=100){

       ghdbar_hd(x) = ghd*(1+3*xdist/100)


      gkabar_kap(x) = gkap*(1+xdist/100)

                      }
		 if (xdist > 100){

                   vhalfl_hd=-81
              

                  ghdbar_hd(x) = ghd*(1+3*xdist/100)

               
                   gkabar_kad(x) = gkad*(1+xdist/100)

                  
                   gkabar_kap(x)=0 
	      	
 		} //end of xdist>100
        }//end for(x)
  } //end for all sec


access soma
ghdbar_hd(x) = ghd
vhalfl_hd=-73
gkabar_kap(x)=gkap


forsec all {
        v=Vrest
        if (ismembrane("nax") || ismembrane("na3")) {ena=55}
	
        if (ismembrane("kdr") || ismembrane("kap") || ismembrane("kad")) {ek=-90}
        if (ismembrane("hd") ) {ehd_hd=-30}
	}


forsec all {
	for (x) {
	
	if (!ismembrane("hd")){e_pas(x)=Vrest+(ina(x)+ik(x))/g_pas(x)}
	if (ismembrane("hd")) {e_pas(x)=Vrest+(ina(x)+ik(x)+ih_hd(x))/g_pas(x)}


		}
	}

} //end for biophys

proc position() { local i
  soma for i = 0, n3d()-1 {
//distance(0,x)
    pt3dchange(i, $1-x+x3d(i), $2-y+y3d(i), $3-z+z3d(i), diam3d(i))
  }
  x = $1  y = $2  z = $3
}
proc connect2target() { //$o1 target point process, $o2 returned NetCon
  soma $o2 = new NetCon(&v(1), $o1)
}
objref syn_


//J. Berzhanskaya edit 2005-2007
//next 4 proc maxn3d (for setting extracellular comp), setrx, setrxRec
// C Mcintyre , 2001
proc setpointers() {
  grindaway()  // in interpxyz.hoc, determines interpolated locations of nodes
/*
  forall for (x) if (x!=0 && x!=1) setpointer im_xtra(x), i_membrane(x)
  forall for (x) if (x!=0 && x!=1) setpointer ex_xtra(x), e_extracellular(x)
*/
  forall {
    if (ismembrane("xtra")) {
	for (x) if (x!=0 && x!=1) {
		setpointer im_xtra(x), i_membrane(x)
		setpointer ex_xtra(x), e_extracellular(x)
	}
    }
  }
}

/* Computes xyz coords of nodes in a model cell 
   whose topology & geometry are defined by pt3d data.
   Expects sections to already exist, and that the xtra mechanism has been inserted
 */


// original data, irregularly spaced
objref xx, yy, zz, length
// interpolated data, spaced at regular intervals
objref xint, yint, zint, range

proc grindaway() { local ii, nn, kk, xr
	forall {
	  if (ismembrane("xtra")) {
		// get the data for the section
		nn = n3d()
		xx = new Vector(nn)
		yy = new Vector(nn)
		zz = new Vector(nn)
		length = new Vector(nn)

		for ii = 0,nn-1 {
			xx.x[ii] = x3d(ii)
			yy.x[ii] = y3d(ii)
			zz.x[ii] = z3d(ii)
			length.x[ii] = arc3d(ii)
		}

		// to use Vector class's .interpolate() 
		// must first scale the independent variable
		// i.e. normalize length along centroid
		length.div(length.x[nn-1])

		// initialize the destination "independent" vector
		range = new Vector(nseg+2)
		range.indgen(1/nseg)
		range.sub(1/(2*nseg))
		range.x[0]=0
		range.x[nseg+1]=1

		// length contains the normalized distances of the pt3d points 
		// along the centroid of the section.  These are spaced at 
		// irregular intervals.
		// range contains the normalized distances of the nodes along the 
		// centroid of the section.  These are spaced at regular intervals.
		// Ready to interpolate.

		xint = new Vector(nseg+2)
		yint = new Vector(nseg+2)
		zint = new Vector(nseg+2)
		xint.interpolate(range, length, xx)
		yint.interpolate(range, length, yy)
		zint.interpolate(range, length, zz)

		// for each node, assign the xyz values to x_xtra, y_xtra, z_xtra
		//for ii = 0, nseg+1 {

// also avoid writing coords of the 1 end into the last internal node's coords
		for ii = 1, nseg { 
			xr = range.x[ii]
			x_xtra(xr) = xint.x[ii]
			y_xtra(xr) = yint.x[ii]
			z_xtra(xr) = zint.x[ii]
		}
	  }
	}
}



proc maxn3d() {
USER5MAX = 76
APIDENDMAX = 74
BASDENDMAX = 43
TOTALDEND = USER5MAX + APIDENDMAX + BASDENDMAX + 3 
// Finds number of subsegments for each segment and stores into vobj
// For each segment, endpoints and intermediates from xtra are stored into x and y coordinate matrices
// Total of nseg +2 points for each segment (ends + at least one midpoint  
	numelements =197
	vobj = new Vector(numelements)
	num = 0

for i=0,USER5MAX {

		vobj.x[i] = user5[i].nseg
		if( vobj.x[i] > num) {num = vobj.x[i] }
	}

for i=USER5MAX+1,USER5MAX+APIDENDMAX+1 {

k=i-USER5MAX-1


	
		vobj.x[i] = apical_dendrite[k].nseg
		if( vobj.x[i] > num) {num = vobj.x[i] }
	}

for i=USER5MAX+APIDENDMAX+2,USER5MAX+APIDENDMAX+BASDENDMAX+2 {

k=i-USER5MAX-APIDENDMAX-2

		vobj.x[i] = dendrite[k].nseg
		if( vobj.x[i] > num) {num = vobj.x[i] }
	}
		vobj.x[USER5MAX+APIDENDMAX+BASDENDMAX+3] = soma.nseg	
	
	xobj = new Matrix(numelements,num+1)
	yobj = new Matrix(numelements,num+1)
	zobj = new Matrix(numelements,num+1)
	mobj = new Matrix(numelements,num+1)

	setpointers()

for ii=0,USER5MAX {
	
		access user5[ii]
		
		if (nseg ==1){
			xobj.x[ii][0] = (x3d(0.5))
			yobj.x[ii][0] = (y3d(0.5))
			zobj.x[ii][0] = (z3d(0.5))
		} else{

			for jj=1,(vobj.x[ii]-1) {
				xv = x_xtra(0+(jj/((vobj.x[ii]))))
				yv = y_xtra(0+(jj/((vobj.x[ii]))))
				zv = z_xtra(0+(jj/((vobj.x[ii]))))
				xobj.x[ii][jj] = (xv)
				yobj.x[ii][jj] = (yv)
				zobj.x[ii][jj] = (zv)
			}
	
			jj =0
			xobj.x[ii][jj] = (x3d(0))
			yobj.x[ii][jj] = (y3d(0))
			zobj.x[ii][jj] = (z3d(0))
			jj =vobj.x[ii]
			xobj.x[ii][jj] = (x3d(n3d()-1))
			yobj.x[ii][jj] = (y3d(n3d()-1))
			zobj.x[ii][jj] = (z3d(n3d()-1))
		}
	}


 
for ii=USER5MAX+1,USER5MAX+APIDENDMAX+1  {
        
             kk=ii-USER5MAX-1
		access apical_dendrite[kk]
		
		if (nseg ==1){
			xobj.x[ii][0] = (x3d(0.5))
			yobj.x[ii][0] = (y3d(0.5))
			zobj.x[ii][0] = (z3d(0.5))
		} else{

			for jj=1,(vobj.x[ii]-1) {
				xv = x_xtra(0+(jj/((vobj.x[ii]))))
				yv = y_xtra(0+(jj/((vobj.x[ii]))))
				zv = z_xtra(0+(jj/((vobj.x[ii]))))
				xobj.x[ii][jj] = (xv)
				yobj.x[ii][jj] = (yv)
				zobj.x[ii][jj] = (zv)
			}
	
			jj =0
			xobj.x[ii][jj] = (x3d(0))
			yobj.x[ii][jj] = (y3d(0))
			zobj.x[ii][jj] = (z3d(0))
			jj =vobj.x[ii]
			xobj.x[ii][jj] = (x3d(n3d()-1))
			yobj.x[ii][jj] = (y3d(n3d()-1))
			zobj.x[ii][jj] = (z3d(n3d()-1))
		}
	}


for ii=USER5MAX+APIDENDMAX+2,USER5MAX+APIDENDMAX+BASDENDMAX+2 {

kk=ii-USER5MAX-APIDENDMAX-2
access  dendrite[kk]
		
		if (nseg ==1){
			xobj.x[ii][0] = (x3d(0.5))
			yobj.x[ii][0] = (y3d(0.5))
			zobj.x[ii][0] = (z3d(0.5))
		} else{

			for jj=1,(vobj.x[ii]-1) {
				xv = x_xtra(0+(jj/((vobj.x[ii]))))
				yv = y_xtra(0+(jj/((vobj.x[ii]))))
				zv = z_xtra(0+(jj/((vobj.x[ii]))))
				xobj.x[ii][jj] = (xv)
				yobj.x[ii][jj] = (yv)
				zobj.x[ii][jj] = (zv)
			}
	
			jj =0
			xobj.x[ii][jj] = (x3d(0))
			yobj.x[ii][jj] = (y3d(0))
			zobj.x[ii][jj] = (z3d(0))
			jj =vobj.x[ii]
			xobj.x[ii][jj] = (x3d(n3d()-1))
			yobj.x[ii][jj] = (y3d(n3d()-1))
			zobj.x[ii][jj] = (z3d(n3d()-1))
		}
	}


	
	soma{
ii=USER5MAX+APIDENDMAX+BASDENDMAX+3
		if (soma.nseg ==1){
			xobj.x[ii][0] = (x3d(0.5))
			yobj.x[ii][0] = (y3d(0.5))
			zobj.x[ii][0] = (z3d(0.5))
		} else{		

			for jj=1,(vobj.x[ii]-1) {
				xv = x_xtra(0+(jj/((vobj.x[ii]))))
				yv = y_xtra(0+(jj/((vobj.x[ii]))))
				zv = z_xtra(0+(jj/((vobj.x[ii]))))
				xobj.x[ii][jj] = (xv)
				yobj.x[ii][jj] = (yv)
				zobj.x[ii][jj] = (zv)
			}
		
			jj =0
			xobj.x[ii][jj] = (x3d(0))
			yobj.x[ii][jj] = (y3d(0))
			zobj.x[ii][jj] = (z3d(0))
			jj =vobj.x[ii]
			xobj.x[ii][jj] = (x3d(n3d()-1))
			yobj.x[ii][jj] = (y3d(n3d()-1))
			zobj.x[ii][jj] = (z3d(n3d()-1))
			}
		}
}
//End maxn3d


///setrx sets coeff to multiply is,and essentially do mobj

proc setrx() {  // now expects xyc coords as arguments
USER5MAX = 76
APIDENDMAX = 74
BASDENDMAX = 43
TOTALDEND = USER5MAX + APIDENDMAX + BASDENDMAX + 3 
  for i=0,USER5MAX {
               user5[i]{
    if (ismembrane("xtra")) {
             for j=1,vobj.x[i]{

user5[i].coeff_xtra((0+(2*j-1)/((2*nseg))))=mobj.x[i][j]*0.00002



		               } 
                            }
         } //end user5
}
for i=USER5MAX+1,USER5MAX+APIDENDMAX+1 {
k=i-USER5MAX-1
apical_dendrite[k]{
    if (ismembrane("xtra")) {
             for j=1,vobj.x[i]{

apical_dendrite[k].coeff_xtra((0+(2*j-1)/((2*nseg))))=mobj.x[i][j]*0.00002



		               } 
                            }
         } //end apical_dendrite
}
for i=USER5MAX+APIDENDMAX+2,USER5MAX+APIDENDMAX+BASDENDMAX+2 {
k=i-USER5MAX-APIDENDMAX-2
dendrite[k]{
    if (ismembrane("xtra")) {
             for j=1,vobj.x[i]{

dendrite[k].coeff_xtra((0+(2*j-1)/((2*nseg))))=mobj.x[i][j]*0.00002


		               } 
                            }
         } //end apical_dendrite

 }

soma {
   if (ismembrane("xtra")) {
i=USER5MAX+APIDENDMAX+BASDENDMAX+3
         for j=1,vobj.x[i]{
soma.coeff_xtra((0+(2*j-1)/((2*nseg))))=mobj.x[i][j]*0.00002

                                } 

                              }
     }//end soma


}
///end setrx()


//sterxRec
// electrode coordinates:
// for this test, default location is 50 microns horizontal from the cell's 0,0,0
XE = 50  // um
YE = 0
ZE = 0

proc setrxRec() {  // now does not expects xyc coords as arguments

rd=0
//dupl
rho = 35.4
USER5MAX = 76
APIDENDMAX = 74
BASDENDMAX = 43
TOTALDEND = USER5MAX + APIDENDMAX + BASDENDMAX + 3 
 
  for i=0,USER5MAX {

  user5[i]{
    if (ismembrane("xtra")) {
      for (x) if ((x>0) && (x<1)) {
 
rd = sqrt((user5[i].x_xtra(x) - XE)^2 + (user5[i].y_xtra(x) - YE)^2 +(user5[i].z_xtra(x) - ZE)^2)

user5[i].recx_xtra(x)=(rho / 4 / PI)*(1/rd)*0.01


		                    } 
  
                             }
                             }//end user5[i]
       } ///end i

for i=0,APIDENDMAX {
apical_dendrite[i]{

    if (ismembrane("xtra")) {
      for (x) if ((x>0) && (x<1)) {
        rd = sqrt((apical_dendrite[i].x_xtra(x) - XE)^2 + (apical_dendrite[i].y_xtra(x) - YE)^2 +(apical_dendrite[i].z_xtra(x) - ZE)^2)

apical_dendrite[i].recx_xtra(x)=(rho / 4 / PI)*(1/rd)*0.01


		                    } 
  
                             }
                             }//end of apical dendrite
       } ///end i

for i=0,BASDENDMAX {
dendrite{
    if (ismembrane("xtra")) {
    //print "basal ", i
      for (x) if ((x>0) && (x<1)) {
        rd = sqrt((dendrite[i].x_xtra(x) - XE)^2 + (dendrite[i].y_xtra(x) - YE)^2 +(dendrite[i].z_xtra(x) - ZE)^2)

dendrite[i].recx_xtra(x)=(rho / 4 / PI)*(1/rd)*0.01


		                    } 
  
                             }
                             }//end of dendrite
                             
       } ///end i


      soma {
        if (ismembrane("xtra")) {
 
            for (x) if ((x>0) && (x<1)) {
        rd = sqrt((soma.x_xtra(x) - XE)^2 + (soma.y_xtra(x) - YE)^2+(soma.z_xtra(x) - ZE)^2)

soma.recx_xtra(x)=(rho / 4 / PI)*(1/rd)*0.01




		                         } 
 
// print "rho", rho

                                     }
                  }// end soma


 }

//end setRxrec

proc setRecMat() {  // now expects xyc coords as arguments
//sets rxobj for each end and CENTER of each segment
rd=0
Nel=10
USER5MAX = 76
APIDENDMAX = 74
BASDENDMAX = 43
TOTALDEND = USER5MAX + APIDENDMAX + BASDENDMAX + 3 

xcEl = new Vector(Nel)
ycEl = new Vector(Nel)
zcEl = new Vector(Nel)


XE = 50  
YE = 0
ZE = 0
for n=0,Nel-1 {
xcEl.x[n]=XE
zcEl.x[n]=ZE
// note that 4 below has to be Nel/2 and has to be changed manually
ycEl.x[n]=YE+100*(n-Nel/2)

               }
rxobj = new Matrix(numelements,Nel)

//print "rxobj[1][1]", rxobj.x[1][1]

for n=0,Nel-1 {
 // print "nel", n

  for i=0,USER5MAX {
  user5[i]{

    if (ismembrane("xtra")) {

   rd = sqrt((user5[i].x_xtra(0.5) - xcEl.x[n])^2 + (user5[i].y_xtra(0.5)- ycEl.x[n])^2 +(user5[i].z_xtra(0.5) - zcEl.x[n])^2)

rxobj.x[i][n]=(rho / 4 / PI)*(1/rd)*0.01



                               }
                               }//end of user5i
                      } //end i
for i=USER5MAX+1,USER5MAX+APIDENDMAX+1 {
k=i-USER5MAX-1
apical_dendrite[k]{

    if (ismembrane("xtra")) {
rd=1
   rd = sqrt((apical_dendrite[k].x_xtra(0.5) - xcEl.x[n])^2 +(apical_dendrite[k].y_xtra(0.5)- ycEl.x[n])^2 +(apical_dendrite[k].z_xtra(0.5) - zcEl.x[n])^2)

rxobj.x[i][n]=(rho / 4 / PI)*(1/rd)*0.01


                               }
                               }//end of apical[k] 
                      } //end i

for i=USER5MAX+APIDENDMAX+2,USER5MAX+APIDENDMAX+BASDENDMAX+2 {
k=i-USER5MAX-APIDENDMAX-2
dendrite[k]{

    if (ismembrane("xtra")) {

     rd = sqrt((dendrite[k].x_xtra(0.5) - xcEl.x[n])^2 + (dendrite[k].y_xtra(0.5)- ycEl.x[n])^2 +(dendrite[k].z_xtra(0.5) - zcEl.x[n])^2)

rxobj.x[i][n]=(rho / 4 / PI)*(1/rd)*0.01


                               }
                               }//end dendrite k
                      } //end i


      soma {
        if (ismembrane("xtra")) {

rd = sqrt((soma.x_xtra(0.5) - xcEl.x[n])^2 + (soma.y_xtra(0.5) - ycEl.x[n])^2 +(soma.z_xtra(0.5) - zcEl.x[n])^2)
    
rxobj.x[USER5MAX+APIDENDMAX+BASDENDMAX+3][n]=(rho / 4 / PI)*(1/rd)*0.01




                                      }
              }
  }//end of Nel

}
//end of setRecMat


///original electrode (next to the soma)
func fieldrec1(){local sum
	sum = 0
	
forsec all {
	  if (ismembrane("xtra")) {
// avoid nodes at 0 and 1 ends, which shouldn't make any contribution
		for (x) if ((x>0) && (x<1)) sum += er_xtra(x)
	  }
	}
	return sum
}



func fieldrec() {local i, sum
//requires 1 argument
USER5MAX = 76
APIDENDMAX = 74
BASDENDMAX = 43
TOTALDEND = USER5MAX + APIDENDMAX + BASDENDMAX + 3 
ElN=$1
	sum = 0
	for n=0,USER5MAX-1 {


   if (ismembrane("xtra")) {
    sum += rxobj.x[n][ElN]*user5[n].er_xtra(0.5)/user5[n].recx_xtra(0.5)

	                   }
	                  }//end n
for n=USER5MAX+1,USER5MAX+APIDENDMAX {
k=n-USER5MAX-1


   if (ismembrane("xtra")) {
    sum += rxobj.x[n][ElN]*apical_dendrite[k].er_xtra(0.5)/apical_dendrite[k].recx_xtra(0.5)

	                   }
	                  }//end n
for n=USER5MAX+APIDENDMAX+2,USER5MAX+APIDENDMAX+BASDENDMAX+1 {
k=n-USER5MAX-APIDENDMAX-2

   if (ismembrane("xtra")) {
    sum += rxobj.x[n][ElN]*dendrite[k].er_xtra(0.5)/dendrite[k].recx_xtra(0.5)

	                   }
	                  }//end n

soma{
	  if (ismembrane("xtra")) {
    sum += rxobj.x[USER5MAX+APIDENDMAX+BASDENDMAX+3][ElN]*soma.er_xtra(0.5)/soma.recx_xtra(0.5)

                                   }
     }//end soma
	return sum
}
proc pasinit(){
// Inserts passive properties from Migliore model and paper.

	forsec all {
		for (x) 	{if (ismembrane("na3")||ismembrane("nax")){e_pas(x)=v(x)+(ina(x)+ik(x))/g_pas(x)
	                 if (ismembrane("hd")) {e_pas(x)=e_pas(x)+ih_hd(x)/g_pas(x)}


				} else {
					if (ismembrane("pas")){
						e_pas(x)=v(x)
					}
				}
		}

	}

}
// End pasinit

func fieldextstimulus(){												
efield=$1
// Calculates the external field for all of the points created in maxn3d() above and stores in mobj.
// Linear Field

	mobj = new Matrix(numelements,num+1)

	for i=0,TOTALDEND{
	
		for j=0,vobj.x[i]{
		
		
		x = xobj.x[i][j]*.001		//mm
		y = yobj.x[i][j]*.001		//mm
		thetad = theta*(PI/180)
		mobj.x[i][j] = (efield)*((cos(thetad)*y)+(sin(thetad)*x))		//Linear field
	    
		// print "efield", efield
		// print "dend", i
		// print "seg", j
	    // print "mobj", mobj.x[i][j] 
		}	
	}
 
setrx()
setrxRec()

// do no del
setRecMat()

return efield
}
// End fieldextstimulus

proc noextstimulus(){

	mobj = new Matrix(numelements,num+1)
		mrow = mobj.nrow
		mcol = mobj.ncol
		for i=0,mrow-1{
			for j=0,mcol-1{
				mobj.x[i][j] = 0
			}
		}


setrx()
setrxRec()
setRecMat()

}
// End noextstimulus
endtemplate Cell_Cell




begintemplate BasketCell
public synlist, x, y, z, position, connect2target

objref synlist

public soma
public all
create soma
objref Esyn, Isyn

nst=4
	objectvar intstim2[nst]
double stimdur[nst], stimdel[nst], stimamp[nst]
public intstim2, stimdur, stimamp, stimdel


objref Esyn, Isyn
proc init() {

	temp()
synlist = new List()
x = y = z = 0 // only change via position

	synapses()
}

objref all

proc temp() {

	 soma {nseg=3 L=20 diam=20} // changed L & diam
// soma {nseg=9 L=20 diam=20} // changed L & diam
		
	    


///start julia channels
Vrest = -65

//Membrane Resistance

Rm = 28000
RmDend = Rm/2
RmSoma = Rm

//Membrane Capacitance

Cm    = 1
CmSoma= Cm
CmDend = Cm*2

														
//Axial Resistance

RaAll= 150
RaSoma=150  

//Parameters


Vrest = -65
gna =  0.02 
gkdr = 0.005
KMULT =  0.025 
KMULTP = 0.025
//basket cell
ghd=0.00005 

mult1 = 1		
mult2 = 1	

soma {   insert pas 
			e_pas=Vrest
			g_pas = 1/RmSoma
			Ra = RaSoma
			cm = CmSoma
			
            

			insert na3  gbar_na3=gna  ena=55
                insert kdr gkdrbar_kdr=gkdr ek=-90
			ar2_na3=0.8
            
                
}	
soma {
         v=Vrest
        if (ismembrane("nax") || ismembrane("na3")) {ena=55}
 
	
        if (ismembrane("kdr") || ismembrane("kap") || ismembrane("kad")) {ek=-90}
        if (ismembrane("hd") ) {ehd_hd=-30}
	}


soma {
	for (x) {
e_pas(x)=Vrest+(ina(x)+ik(x))/g_pas(x)
	



		}

	}

//end i



}
// end temp

proc position() { local i
  soma for i = 0, n3d()-1 {
    pt3dchange(i, $1-x+x3d(i), $2-y+y3d(i), $3-z+z3d(i), diam3d(i))
  }
  x = $1  y = $2  z = $3
}
proc connect2target() { //$o1 target point process, $o2 returned NetCon
  soma $o2 = new NetCon(&v(1), $o1)
}
objref syn_
proc synapses() {
  /* Exc0 */   soma syn_ = new Exp2Syn(0.8)  synlist.append(syn_)
// AMPA timing on basket cells 
syn_.tau1 = 0.05
   syn_.tau2 = 5
   syn_.e = 0

  /* Inh1 */   soma syn_ = new Exp2Syn(0.2)  synlist.append(syn_)
    syn_.tau1 = 1
    syn_.tau2 = 20
    syn_.e = -75
}
func is_art() { return 0 }


	endtemplate BasketCell


begintemplate OLMCell
// Note that OLM cell designates o-cell in general 
//and can correspond O-bi when connected proximally and OLM- when distally

public soma
create soma
public synlist, x, y, z, position, connect2target

objref synlist
public all
objref Esyn, Isyn
nst=4
	objectvar intstim3[nst]
objectvar intstim4[nst]
double stimdur[nst], stimdel[nst], stimamp[nst]
public intstim3, intstim4, stimdur, stimamp, stimdel


objref Esyn, Isyn
proc init() {

synlist = new List()
	temp()
x = y = z = 0 // only change via position

	synapses()
}

objref all

proc temp() {

	 soma {nseg=3 L=30 diam=30} // changed L & diam

// soma {nseg=9 L=30 diam=30} // changed L & diam
		
	
    

///start julia channels
Vrest = -65
//Membrane Resistance

Rm = 28000
RmDend = Rm/2
RmSoma = Rm

//Membrane Capacitance

Cm    = 1
CmSoma= Cm
CmDend = Cm*2

														
//Axial Resistance

RaAll= 150
RaSoma=150  

//Parameters

Vrest = -65
gna =  0.02 
gkdr = 0.01 
KMULT =  0.025
KMULTP = 0.025 
//OLM cell
ghd=0.00005 

mult1 = 1		
mult2 = 1	
soma {   insert pas 
			e_pas=Vrest
			g_pas = 1/RmSoma
			Ra = RaSoma
			cm = CmSoma
			//insert extracellular								
			//insert xtra

               insert hd ghdbar_hd=ghd	vhalfl_hd=-73

			insert na3  gbar_na3=gna  ena=55
                insert kdr gkdrbar_kdr=gkdr ek=-90
			ar2_na3=0.8
                insert kap gkabar_kap = KMULTP ek=-90

	}

	soma {
        v=Vrest
        if (ismembrane("nax") || ismembrane("na3")) {ena=55}
 
	
        if (ismembrane("kdr") || ismembrane("kap") || ismembrane("kad")) {ek=-90}
        if (ismembrane("hd") ) {ehd_hd=-30}
	}



soma {
	for (x) {
	
	if (!ismembrane("hd")){e_pas(x)=Vrest+(ina(x)+ik(x))/g_pas(x)}
	if (ismembrane("hd")) {e_pas(x)=Vrest+(ina(x)+ik(x)+ih_hd(x))/g_pas(x)}


		}
	}

for i=0,0 {
stimdel[i]=50
stimdur[i]=500
stimamp[i]=0.02

/* 0.4 stim when we want the cell to fire with regular spikes */

}

}// end temp

proc position() { local i
  soma for i = 0, n3d()-1 {
    pt3dchange(i, $1-x+x3d(i), $2-y+y3d(i), $3-z+z3d(i), diam3d(i))
  }
  x = $1  y = $2  z = $3
}
proc connect2target() { //$o1 target point process, $o2 returned NetCon
  soma $o2 = new NetCon(&v(1), $o1)
}
objref syn_
proc synapses() {
  /* Exc0 */   soma syn_ = new Exp2Syn(0.8)  synlist.append(syn_)
  /* Inh1 */   soma syn_ = new Exp2Syn(0.2)  synlist.append(syn_)
    syn_.tau1 = 0.5
    syn_.tau2 = 10
    syn_.e = -90
}
func is_art() { return 0 }

//end temp
	
	endtemplate OLMCell

begintemplate NetStim_NetStim
public pp, connect2target, x, y, z, position, is_art
external acell_home_
objref pp
proc init() {
  acell_home_ pp = new NetStim(.5)
    pp.number = 50000
    pp.interval = 50
    pp.start = 30
    pp.noise=1

}
func is_art() { return 1 }
proc connect2target() { $o2 = new NetCon(pp, $o1) }
proc position(){x=$1  y=$2  z=$3}
endtemplate NetStim_NetStim


// 20 pyramidal cells
ncells=20
objref syn_
objref syn2_

objref wts1[ncells+32]

//for i=0,ncells-1{
//Note: wts1 has to have more dimensions than N of pyramidal cells,

for i=0,51{
wts1[i] = new Vector(totSyn,10)
}

// objref wts2
// wts2 = new Vector(totSyn,10)
objref cells



func InsertSyn1(){

access cells.object($1).soma
distance()
 

TWO_THIRD_APIDIST = 350 
USER5MAX = 76
APIDENDMAX = 74
BASDENDMAX = 43

BEGINSECTION= 1
ENDSECTION1= BASDENDMAX
ENDSECTION2= APIDENDMAX
ENDSECTION3 = USER5MAX



//compartment count
objref rc
objref rc1
objref rc2
objref rc3
objref rc4
//rc1 = new Random() //basal
rc2 = new Random() //apical
rc3 = new Random() //trunk
//rc4 = new Random() //trunk

//rc = new Random() 
//rc.MCellRan4(highindex+250) //High Index is 1001, set in ModelTypeI
//rc.uniform(BEGINSECTION, ENDSECTION)  // no basal dend for choice 1,2, 

//rc1.MCellRan4(highindex+250) //High Index is 1001, set in ModelTypeI
//rc1.uniform(BEGINSECTION, ENDSECTION1)  // no basal dend for choice 1,2, //rc2.MCellRan4(highindex+250) //High Index is 1001, set in ModelTypeI
rc2.uniform(BEGINSECTION, ENDSECTION3)  // no basal dend for choice 1,2, //rc3.MCellRan4(highindex+250) //High Index is 1001, set in ModelTypeI
//rc3.uniform(BEGINSECTION, ENDSECTION3)  // no basal dend for choice 1,2, 
//rc3.uniform(BEGINSECTION, ENDSECTION1)
//rc4.MCellRan4(highindex+250) //High Index is 1001, set in ModelTypeI
//rc4.uniform(BEGINSECTION, ENDSECTION3)  // no basal dend for choice 1,2, 



TWO_THIRD_APIDIST=350

for (i=0; i <= totSyn-1; i +=1) {
    count = 1
    /*---------generate a syn at random section and random segment--*/
	flag=0
	while (flag==0) {//pick compartments until get right distance

	//	comp=int(rc3.repick()+0.5)
comp=int(rc2.repick()+0.5)
		////comp=49
	        //Cell_Cell[0].user5[comp] { 
//cells.object($1).apical_dendrite[comp] {
            cells.object($1).user5[comp] {
//cells.object($1).dendrite[comp] {
		    count = 0
		   
                   tmp = 0.5
                   dist = distance(tmp)
			
if ((distance(tmp) < 350) && (distance(tmp) > 150) ) {flag=1} else {flag=0} 


		}// end user5
	}//end while flag
   


cells.object($1).user5[comp] syn_ = new Exp2Syn(0.5) cells.object($1).synlist.append(syn_)


     
A = 0.00611126
B = 82.5413

//netw50
//wt=15*(A*dist*dist+B)/1e+06 
// netw44
wt=0.8*(A*dist*dist+B)/1e+06 

wts1[$1].set(i,wt)





count=count+1

}//end i

wts1[$1].printf

/// next few line Basket synapse on the soma

    /*---------generate a syn at random section and random segment--*/

	flag=0
	while (flag==0) {//pick compartments until get right distance

comp=0
 cells.object($1).user5[comp] {  
	        
		    count = 0
		   
                   tmp = 0.5
                  dist = distance(tmp)
			
if ((distance(tmp) <200) ) {flag=1} else {flag=0} //print comp

		}// end user5
	}//end while flag
   // print "inh comp", comp
      cells.object($1).user5[comp] syn_ = new Exp2Syn(0.5)  cells.object($1).synlist.append(syn_)
       
    syn_.tau1 = 0.5
    syn_.tau2 = 5
    syn_.e = -90

   
 

wt=0.04



count=count+1

///next few lines for OLM - (o-bi) synapse



for (i=0; i <= 26; i +=1) {

    count = 1
    /*---------generate a syn at random section and random segment--*/
	flag=0
	while (flag==0) {//pick compartments until get right distance

		// comp=int(rc3.repick()+0.5)
               // cells.object($1).user5[comp] {  
	        
comp=int(rc2.repick()+0.5)
cells.object($1).user5[comp] {  
	        
  //              cells.object($1).apical_dendrite[comp] {  
	        
		    count = 0
		   
                   tmp = 0.5
                  dist = distance(tmp)
// distant synapse	
//if ((distance(tmp) < 500) && (distance(tmp) > 300) ) {flag=1} else {flag=0} 
// proximal synapse
if ((distance(tmp) < 350) && (distance(tmp) > 150) ) {flag=1} else {flag=0} 
//print comp
//if ((distance(tmp) < 200) ) {flag=1} else {flag=0} //print comp


		}// end user5
	}//end while flag
   // print "inh comp", comp
      cells.object($1).user5[comp] syn_ = new Exp2Syn(0.5)  cells.object($1).synlist.append(syn_)
       
    syn_.tau1 = 1
    syn_.tau2 = 20
    syn_.e = -90


wt=0.04


count=count+1

}//end i

return count
}

// end InsertSyn1






//connectivity objects

objref cells, nclist, netcon
{cells = new List()  nclist = new List()}

func cell_append() {cells.append($o1)  $o1.position($2,$3,$4)
	return cells.count - 1
}

func nc_append() {//srcindex, tarcelindex, synindex
  if ($3 >= 0) {
    cells.object($1).connect2target(cells.object($2).synlist.object($3),netcon)
    netcon.weight = $4   netcon.delay = $5
  }else{
    cells.object($1).connect2target(cells.object($2).pp,netcon)
    netcon.weight = $4   netcon.delay = $5
  }
  nclist.append(netcon)
  return nclist.count - 1
}
//model_globals()


//Network instantiation

/* Cell0 Cell_Cell[0] */  cell_append(new Cell_Cell(),	-30,	 0, 0)
/* Cell1 Cell_Cell[1]*/  cell_append(new Cell_Cell(),	20,	 0, 0)
/* Cell2 Cell_Cell[2]*/  cell_append(new Cell_Cell(),	70,	 0, 0)
/* Cell3 Cell_Cell[3]*/  cell_append(new Cell_Cell(),	120,	 0, 0)

/* Cell4 BasketCell[0] bask */  cell_append(new BasketCell(),	-35,	 53, 0)
/* Cell5 BasketCell[1] bask */  cell_append(new BasketCell(),	15,	 53, 0)
/* Cell6 BasketCell[2] bask */  cell_append(new BasketCell(),	45,	 53, 0)
/* Cell7 BasketCell[3] bask */  cell_append(new BasketCell(),	75,	 53, 0)

/* Cell8 OLMCell[0]*/  cell_append(new OLMCell(),	-40,	 -53, 0)
/* Cell9 OLMCell[1]*/  cell_append(new OLMCell(),	10,	 -53, 0)
/* Cell10 OLMCell[2]*/  cell_append(new OLMCell(),	40,	 -53, 0)
/* Cell11 OLMCell[3]*/  cell_append(new OLMCell(),	70,	 -53, 0)


/* Cell12 Cell_Cell[4]*/  cell_append(new Cell_Cell(),	-30,	 0, 50)
/* Cell13 Cell_Cell[5]*/  cell_append(new Cell_Cell(),	20,	 0, 50)
/* Cell14 Cell_Cell[6]*/  cell_append(new Cell_Cell(),	70,	 0, 50)
/* Cell15 Cell_Cell[7]*/  cell_append(new Cell_Cell(),	120,	 0, 50)

/* Cell16 BasketCell[4] bask */  cell_append(new BasketCell(),	-35,	 53, 50)
/* Cell17 BasketCell[5] bask */  cell_append(new BasketCell(),	15,	 53, 50)
/* Cell18 BasketCell[6] bask */  cell_append(new BasketCell(),	45,	 53, 50)
/* Cell19 BasketCell[7] bask */  cell_append(new BasketCell(),	75,	 53, 50)

/* Cell20 OLMCell[4] */  cell_append(new OLMCell(),	-40,	 -53, 50)
/* Cell21 OLMCell[5] */  cell_append(new OLMCell(),	10,	 -53, 50)
/* Cell22 OLMCell[6] */  cell_append(new OLMCell(),	40,	 -53, 50)
/* Cell23 OLMCell[7] */  cell_append(new OLMCell(),	70,	 -53, 50)


/* Cell24 Cell_Cell[8] */  cell_append(new Cell_Cell(),	-30,	 0, -50)
/* Cell25 Cell_Cell[9] */  cell_append(new Cell_Cell(),	20,	 0, -50)
/* Cell26 Cell_Cell[10] */  cell_append(new Cell_Cell(),	70,	 0, -50)
/* Cell27 Cell_Cell[11] */  cell_append(new Cell_Cell(),	120,	 0, -50)

/* Cell28 BasketCell[8] bask */  cell_append(new BasketCell(),	-35,	 53, -50)
/* Cell29 BasketCell[9] bask */  cell_append(new BasketCell(),	15,	 53, -50)
/* Cell30 BasketCell[10] bask */  cell_append(new BasketCell(),	45,	 53, -50)
/* Cell31 BasketCell[11] bask */  cell_append(new BasketCell(),	75,	 53, -50)

/* Cell32 OLMCell[8] */  cell_append(new OLMCell(),	-40,	 -53,-50)
/* Cell33 OLMCell[9] */  cell_append(new OLMCell(),	10,	 -53, -50)
/* Cell34 OLMCell[10] */  cell_append(new OLMCell(),	40,	 -53, -50)
/* Cell35 OLMCell[11] */  cell_append(new OLMCell(),	70,	 -53, -50)

/* Cell36 Cell_Cell[12] */  cell_append(new Cell_Cell(),	-30,	 0, 100)
/* Cell37 Cell_Cell[13] */  cell_append(new Cell_Cell(),	20,	 0, 100)
/* Cell38 Cell_Cell[14] */  cell_append(new Cell_Cell(),	70,	 0, 100)
/* Cell39 Cell_Cell[15] */  cell_append(new Cell_Cell(),	120,	 0, 100)

/* Cell40 BasketCell[12] bask */  cell_append(new BasketCell(),	-35,	 53, 100)
/* Cell41 BasketCell[13] bask */  cell_append(new BasketCell(),	15,	 53, 100)
/* Cell42 BasketCell[14] bask */  cell_append(new BasketCell(),	45,	 53, 100)
/* Cell43 BasketCell[15] bask */  cell_append(new BasketCell(),	75,	 53, 100)

/* Cell44 OLMCell[12] */  cell_append(new OLMCell(),	-40,	 -53, 100)
/* Cell45 OLMCell[13] */  cell_append(new OLMCell(),	10,	 -53, 100)
/* Cell46 OLMCell[14] */  cell_append(new OLMCell(),	40,	 -53, 100)
/* Cell47 OLMCell[15] */  cell_append(new OLMCell(),	70,	 -53, 100)



/* Cell48 Cell_Cell[16] */  cell_append(new Cell_Cell(),	-30,	 0, -100)
/* Cell49 Cell_Cell[17] */  cell_append(new Cell_Cell(),	20,	 0, -100)
/* Cell50 Cell_Cell[18] */  cell_append(new Cell_Cell(),	70,	 0, -100)
/* Cell51 Cell_Cell[19] */  cell_append(new Cell_Cell(),	120,	 0, -100)

/* Cell52 BasketCell[16] bask */  cell_append(new BasketCell(),	-35,	 53, -100)
/* Cell53 BasketCell[17] bask */  cell_append(new BasketCell(),	15,	 53, -100)
/* Cell54 BasketCell[18] bask */  cell_append(new BasketCell(),	45,	 53, -100)
/* Cell55 BasketCell[19] bask */  cell_append(new BasketCell(),	75,	 53, -100)

/* Cell56 OLMCell[16] */  cell_append(new OLMCell(),	-40,	 -53, -100)
/* Cell57 OLMCell[17] */  cell_append(new OLMCell(),	10,	 -53, -100)
/* Cell58 OLMCell[18] */  cell_append(new OLMCell(),	40,	 -53, -100)
/* Cell59 OLMCell[19] */  cell_append(new OLMCell(),	70,	 -53, -100)



/* NetStim10 */  cell_append(new NetStim_NetStim(),	-390,	 165, 0)

//current clamp in 1st cell

objectvar intstim
access Cell_Cell[0].soma
Cell_Cell[0].soma intstim = new IClamp()
//access electrode
access Cell_Cell[0].soma
exIClmp1 = new IClamp()
access Cell_Cell[0].soma
intstim.loc(0.5)
	intstim.del=10
	intstim.dur=2000
	intstim.amp=0.24


objectvar intstim10
Cell_Cell[4].soma intstim10 = new IClamp()
access Cell_Cell[4].soma
intstim10.loc(0.5)
	intstim10.del=intdel
	intstim10.dur=intpw
	intstim10.amp=Istim0


objectvar intstim11
Cell_Cell[12].soma intstim11 = new IClamp()
access Cell_Cell[12].soma
intstim11.loc(0.5)
	intstim11.del=intdel
	intstim11.dur=intpw
	intstim11.amp=Istim0

objectvar intstim10a
Cell_Cell[8].soma intstim10a = new IClamp()
access Cell_Cell[8].soma
intstim10a.loc(0.5)
	intstim10a.del=intdel
	intstim10a.dur=intpw
	intstim10a.amp=Istim0

objectvar intstim11a
Cell_Cell[16].soma intstim11a = new IClamp()
access Cell_Cell[8].soma
intstim11a.loc(0.5)
	intstim11a.del=intdel
	intstim11a.dur=intpw
	intstim11a.amp=Istim0



objectvar intstim2

access BasketCell[1].soma
BasketCell[1].soma intstim2 = new IClamp()
access BasketCell[1].soma
intstim2.loc(0.5)
	intstim2.del=30
	intstim2.dur=500
	
intstim2.amp=0

objectvar intstim3

access OLMCell[3].soma
OLMCell[3].soma intstim3 = new IClamp()
access OLMCell[3].soma
intstim3.loc(0.5)
	intstim3.del=50
	intstim3.dur=300
	intstim3.amp=-0.06




objectvar intstim4

access OLMCell[1].soma
OLMCell[1].soma intstim4 = new IClamp()
access OLMCell[1].soma
intstim4.loc(0.5)
	
intstim4.del=10
	intstim4.dur=1800
	
intstim4.amp= OStim1 


objectvar intstim5
access OLMCell[5].soma
OLMCell[5].soma intstim5 = new IClamp()
access OLMCell[5].soma
intstim5.loc(0.5)
	intstim5.del=10
	intstim5.dur=1800
	//intstim3.amp=-0.01
intstim5.amp= OStim1 //0.013


objectvar intstim6
access OLMCell[9].soma
OLMCell[9].soma intstim6 = new IClamp()
access OLMCell[9].soma
intstim6.loc(0.5)
	intstim6.del=10
	intstim6.dur=1800
intstim6.amp=OStim1 

objectvar intstim7
access OLMCell[13].soma
OLMCell[13].soma intstim7 = new IClamp()
access OLMCell[13].soma
intstim7.loc(0.5)
	intstim7.del=10
	intstim7.dur=1800
	//intstim3.amp=-0.01
intstim7.amp=OStim1 


objectvar intstim8
access OLMCell[17].soma
OLMCell[17].soma intstim8 = new IClamp()
access OLMCell[17].soma
intstim8.loc(0.5)
	intstim8.del=10
	intstim8.dur=1800
intstim8.amp=OStim1 


objectvar intstim30
access OLMCell[0].soma
OLMCell[0].soma intstim30 = new IClamp()
access OLMCell[0].soma
intstim30.loc(0.5)
	
intstim30.del=10
	intstim30.dur=1800
	
intstim30.amp= OStim2  //0.013


objectvar intstim31
access OLMCell[4].soma
OLMCell[4].soma intstim31 = new IClamp()
access OLMCell[4].soma
intstim31.loc(0.5)
	intstim31.del=10
	intstim31.dur=1800
	
intstim31.amp= OStim2 //0.013


objectvar intstim32
access OLMCell[8].soma
OLMCell[8].soma intstim32 = new IClamp()
access OLMCell[8].soma
intstim32.loc(0.5)
	intstim32.del=10
	intstim32.dur=1800
intstim32.amp=OStim2 // 0.013

objectvar intstim33
access OLMCell[12].soma
OLMCell[12].soma intstim33 = new IClamp()
access OLMCell[12].soma
intstim33.loc(0.5)
	intstim33.del=10
	intstim33.dur=1800
	
intstim33.amp=OStim2 //  0.013


objectvar intstim34
access OLMCell[16].soma
OLMCell[16].soma intstim34 = new IClamp()
access OLMCell[16].soma
intstim34.loc(0.5)
	intstim34.del=10
	intstim34.dur=1800
intstim34.amp=OStim2 //  0.013


objectvar intstim35
access OLMCell[2].soma
OLMCell[2].soma intstim35 = new IClamp()
access OLMCell[2].soma
intstim35.loc(0.5)
	
intstim35.del=10
	intstim35.dur=1800
	
intstim35.amp= OStim3  //0.013


objectvar intstim36
access OLMCell[6].soma
OLMCell[6].soma intstim36 = new IClamp()
access OLMCell[6].soma
intstim36.loc(0.5)
	intstim36.del=10
	intstim36.dur=1800
	
intstim36.amp= OStim3 //0.013


objectvar intstim37
access OLMCell[10].soma
OLMCell[10].soma intstim37 = new IClamp()
access OLMCell[10].soma
intstim37.loc(0.5)
	intstim37.del=10
	intstim37.dur=1800
intstim37.amp=OStim3 // 0.013

objectvar intstim38
access OLMCell[14].soma
OLMCell[14].soma intstim38 = new IClamp()
access OLMCell[14].soma
intstim38.loc(0.5)
	intstim38.del=10
	intstim38.dur=1800
	
intstim38.amp=OStim3 //  0.013


objectvar intstim39
access OLMCell[18].soma
OLMCell[18].soma intstim39 = new IClamp()
access OLMCell[18].soma
intstim39.loc(0.5)
	intstim39.del=10
	intstim39.dur=1800
intstim39.amp=OStim3 //  0.013




//seperate current inj in input cels in each clust



objectvar intstim15

access Cell_Cell[1].soma
Cell_Cell[1].soma intstim15 = new IClamp()
//access electrode
access Cell_Cell[1].soma
intstim15.loc(0.5)
	intstim15.del=intdel
	intstim15.dur=intpw
	intstim15.amp=Istim1

objectvar intstim16

access Cell_Cell[2].soma
Cell_Cell[2].soma intstim16 = new IClamp()
//access electrode
access Cell_Cell[2].soma
intstim16.loc(0.5)
	intstim16.del=intdel
	intstim16.dur=intpw
	intstim16.amp=Istim2

objectvar intstim17

access Cell_Cell[3].soma
Cell_Cell[3].soma intstim17 = new IClamp()
//access electrode
access Cell_Cell[3].soma
intstim17.loc(0.5)
	intstim17.del=intdel
	intstim17.dur=intpw
	intstim17.amp=Istim3

objectvar intstim18

access Cell_Cell[5].soma
Cell_Cell[5].soma intstim18 = new IClamp()
//access electrode
access Cell_Cell[5].soma
intstim18.loc(0.5)
	intstim18.del=intdel
	intstim18.dur=intpw
	intstim18.amp=Istim1

objectvar intstim19

access Cell_Cell[6].soma
Cell_Cell[6].soma intstim19 = new IClamp()
//access electrode
access Cell_Cell[6].soma
intstim19.loc(0.5)
	intstim19.del=intdel
	intstim19.dur=intpw
	intstim19.amp=Istim2

objectvar intstim20

access Cell_Cell[7].soma
Cell_Cell[7].soma intstim20 = new IClamp()
//access electrode
access Cell_Cell[7].soma
intstim20.loc(0.5)
	intstim20.del=intdel
	intstim20.dur=intpw
	intstim20.amp=Istim3


objectvar intstim21

access Cell_Cell[9].soma
Cell_Cell[9].soma intstim21 = new IClamp()
//access electrode
access Cell_Cell[9].soma
intstim21.loc(0.5)
	intstim21.del=intdel
	intstim21.dur=intpw
	intstim21.amp=Istim1

objectvar intstim22

access Cell_Cell[10].soma
Cell_Cell[10].soma intstim22 = new IClamp()
//access electrode
access Cell_Cell[10].soma
intstim22.loc(0.5)
	intstim22.del=intdel
	intstim22.dur=intpw
	intstim22.amp=Istim2

objectvar intstim23

access Cell_Cell[11].soma
Cell_Cell[11].soma intstim23 = new IClamp()
//access electrode
access Cell_Cell[11].soma
intstim23.loc(0.5)
	intstim23.del=intdel
	intstim23.dur=intpw
	intstim23.amp=Istim3

objectvar intstim24

access Cell_Cell[13].soma
Cell_Cell[13].soma intstim24 = new IClamp()
//access electrode
access Cell_Cell[13].soma
intstim24.loc(0.5)
	intstim24.del=intdel
	intstim24.dur=intpw
	intstim24.amp=Istim1

objectvar intstim25

access Cell_Cell[14].soma
Cell_Cell[14].soma intstim25 = new IClamp()
//access electrode
access Cell_Cell[14].soma
intstim25.loc(0.5)
	intstim25.del=intdel
	intstim25.dur=intpw
	intstim25.amp=Istim2

objectvar intstim26

access Cell_Cell[15].soma
Cell_Cell[15].soma intstim26 = new IClamp()
//access electrode
access Cell_Cell[15].soma
intstim26.loc(0.5)
	intstim26.del=intdel
	intstim26.dur=intpw
	intstim26.amp=Istim3


objectvar intstim27
access Cell_Cell[17].soma
Cell_Cell[17].soma intstim27 = new IClamp()
//access electrode
access Cell_Cell[17].soma
intstim27.loc(0.5)
	intstim27.del=intdel
	intstim27.dur=intpw
	intstim27.amp=Istim1

objectvar intstim28

access Cell_Cell[18].soma
Cell_Cell[18].soma intstim28 = new IClamp()
//access electrode
access Cell_Cell[18].soma
intstim28.loc(0.5)
	intstim28.del=intdel
	intstim28.dur=intpw
	intstim28.amp=Istim2

objectvar intstim29

access Cell_Cell[19].soma
Cell_Cell[19].soma intstim29 = new IClamp()
//access electrode
access Cell_Cell[19].soma
intstim29.loc(0.5)
	intstim29.del=intdel
	intstim29.dur=intpw
	intstim29.amp=Istim3



for n=0, 3 {
InsertSyn1(n)
InsertSyn1(n+12)
InsertSyn1(n+24)
InsertSyn1(n+36)
InsertSyn1(n+48)
}

/////Connectivity


for k =0, totSyn/3-1 {

// print "k", k
for n=0, 2 {
m=n+1
if (m > 3) {m=n-3} 


a=wts1[m].get(k)


/* Cell1 -> Cell2.Exc0 */  nc_append(n,   m, k,  a, 5)


a=wts1[m+12].get(k)
/* Cell1 -> Cell2.Exc0 */  nc_append(n+12,   m+12, k,  a, 5)

a=wts1[m+24].get(k)
/* Cell1 -> Cell2.Exc0 */  nc_append(n+24,   m+24, k,  a, 5)

a=wts1[m+36].get(k)
/* Cell1 -> Cell2.Exc0 */  nc_append(n+36,   m+36, k,  a, 5)

a=wts1[m+48].get(k)
/* Cell1 -> Cell2.Exc0 */  nc_append(n+48,   m+48, k,  a, 5)
} //end n

//Projection from cell_1 cluster 1 to first cell in each other cluster (12 and 24)
g=wts1[12].get(k)
l=wts1[24].get(k)
/* Cell2 -> Cell3.Exc0 */  nc_append(1,   12, k,  g, 5)

/* Cell2 -> Cell3.Exc0 */  nc_append(1,   24, k,  l, 5)

g=wts1[36].get(k)
l=wts1[48].get(k)

/* Cell2 -> Cell3.Exc0 */  nc_append(1,   36, k,  g, 5)

/* Cell2 -> Cell3.Exc0 */  nc_append(1,   48, k,  l, 5)

}

for k =totSyn/3, 2*totSyn/3-1 {

for n=0, 2 {
m=n+2
if (m > 3) {m=n-2} 
a=wts1[m].get(k)


/* Cell1 -> Cell2.Exc0 */  nc_append(n,   m, k,  a, 5)
a=wts1[m+12].get(k)
/* Cell1 -> Cell2.Exc0 */  nc_append(n+12,   m+12, k,  a, 5)

a=wts1[m+24].get(k)
/* Cell1 -> Cell2.Exc0 */  nc_append(n+24,   m+24, k,  a, 5)

a=wts1[m+36].get(k)
/* Cell1 -> Cell2.Exc0 */  nc_append(n+36,   m+36, k,  a, 5)

a=wts1[m+48].get(k)
/* Cell1 -> Cell2.Exc0 */  nc_append(n+48,   m+48, k,  a, 5)
  } ///end n

g=wts1[12].get(k)
l=wts1[24].get(k)
//Projection from cell_2 cluster 1 to first cell in each other cluster (12 and 24)
/* Cell3 -> Cell4.Exc0 */  nc_append(2,   12, k,  g, 5)
/* Cell2 -> Cell3.Exc0 */  nc_append(2,   24, k,  l, 5)


g=wts1[36].get(k)
l=wts1[48].get(k)

/* Cell2 -> Cell3.Exc0 */  nc_append(2,   36, k,  g, 5)

/* Cell2 -> Cell3.Exc0 */  nc_append(2,   48, k,  l, 5)

  
}

for k =2*totSyn/3, totSyn-1 {
// print "k", k

for n=0, 2 {
m=n+3
if (m > 3) {m=n-1} 
a=wts1[m].get(k)


/* Cell1 -> Cell2.Exc0 */  nc_append(n,   m, k,  a, 5)
a=wts1[m+12].get(k)
/* Cell1 -> Cell2.Exc0 */  nc_append(n+12,   m+12, k,  a, 5)

a=wts1[m+24].get(k)
/* Cell1 -> Cell2.Exc0 */  nc_append(n+24,   m+24, k,  a, 5)

a=wts1[m+36].get(k)
/* Cell1 -> Cell2.Exc0 */  nc_append(n+36,   m+36, k,  a, 5)

a=wts1[m+48].get(k)
/* Cell1 -> Cell2.Exc0 */  nc_append(n+48,   m+48, k,  a, 5)
}//end n

g=wts1[12].get(k)
l=wts1[24].get(k)
//Projection from cell_3 cluster 1 to first cell in each other cluster (12 and 24)
/* Cell4 -> Cell1.Exc0 */  nc_append(3,   12, k,  g, 5)
/* Cell2 -> Cell3.Exc0 */  nc_append(3,   24, k,  l, 5)

g=wts1[36].get(k)
l=wts1[48].get(k)

/* Cell2 -> Cell3.Exc0 */  nc_append(3,   36, k,  g, 5)

/* Cell2 -> Cell3.Exc0 */  nc_append(3,   48, k,  l, 5)

} //end k


for k =1, totSyn/3-1 {
// print "k", k

n=3
m=0

a=wts1[0].get(k)


/* Cell1 -> Cell2.Exc0 */  nc_append(n,   m, k,  a, 5)

a=wts1[m+12].get(k)
/* Cell1 -> Cell2.Exc0 */  nc_append(n+12,   m+12, k,  a, 5)

a=wts1[m+24].get(k)
/* Cell1 -> Cell2.Exc0 */  nc_append(n+24,   m+24, k,  a, 5)
a=wts1[m+36].get(k)
/* Cell1 -> Cell2.Exc0 */  nc_append(n+36,   m+36, k,  a, 5)

a=wts1[m+48].get(k)
/* Cell1 -> Cell2.Exc0 */  nc_append(n+48,   m+48, k,  a, 5)


} //end k


for k =totSyn/3, 2*totSyn/3-1 {
// print "k", k

n=3
m=1


a=wts1[m].get(k)


/* Cell1 -> Cell2.Exc0 */  nc_append(n,   m, k,  a, 5)
a=wts1[m+12].get(k)
/* Cell1 -> Cell2.Exc0 */  nc_append(n+12,   m+12, k,  a, 5)
a=wts1[m+24].get(k)
/* Cell1 -> Cell2.Exc0 */  nc_append(n+24,  m+24, k,  a, 5)
a=wts1[m+36].get(k)
/* Cell1 -> Cell2.Exc0 */  nc_append(n+36,  m+36, k,  a, 5)
a=wts1[m+48].get(k)
/* Cell1 -> Cell2.Exc0 */  nc_append(n+48,   m+48, k,  a, 5)


}
for k =2*totSyn/3,totSyn/3-1 {
// print "k", k

n=3
m=2

a=wts1[m].get(k)

/* Cell1 -> Cell2.Exc0 */  nc_append(n,   m, k,  a, 5)
a=wts1[m+12].get(k)
/* Cell1 -> Cell2.Exc0 */  nc_append(n+12,   m+12, k,  a, 5)
a=wts1[m+24].get(k)
/* Cell1 -> Cell2.Exc0 */  nc_append(n+24,   m+24, k,  a, 5)
a=wts1[m+36].get(k)
/* Cell1 -> Cell2.Exc0 */  nc_append(n+36,  m+ 36, k,  a, 5)
a=wts1[m+48].get(k)
/* Cell1 -> Cell2.Exc0 */  nc_append(n+48,   m+48, k,  a, 5)



} //end k

for k =0, totSyn-1{
a=wts1[0].get(k)
b=wts1[1].get(k)
c=wts1[2].get(k)
f=wts1[3].get(k)

 /*NetStim4 -> Cell0.Exc0 */  ////nc_append(4,   0, k,  0.001,1)
/*NetStim4 -> Cell0.Exc0 */  ////nc_append(6,   0, k,  5*a,1)
}

for k =0, totSyn-1{
a=wts1[1].get(k)

 /*NetStim4 -> Cell0.Exc0 */ /// nc_append(2,   0, k,  0.001,1)
/*NetStim4 -> Cell0.Exc0 */  ////nc_append(6,   1, k,  5*a,1)
}



for n =0, 3{


///Pyr- bask within lammelar cluster1
/*Cell0 -> Bask0.Exc0 */  nc_append(n,   n+4, 0,  0.0008,0.3)


//Pyr- OLM within lammelar cluster1
for m=0,2 {
/*Cell1 -> OLM2.Exc0 */ // nc_append(n,   9+m, 0,  0.00005,1)

//Pyr- OLM cross lammelar cluster1
/*Cell1 -> OLM2.Exc0 */  //  nc_append(n,   21+m, 0,  0.00003,1)

/*Cell1 -> OLM2.Exc0 */  //  nc_append(n,   33+m, 0,  0.00003,1)

/*Cell1 -> OLM2.Exc0 */  //  nc_append(n,   45+m, 0,  0.00002,1)

/*Cell1 -> OLM2.Exc0 */  //  nc_append(n,   57+m, 0,  0.00002,1)



/*Cell1 -> OLM2.Exc0 */  nc_append(n,   9+m, 0,  0.00002,1)

//Pyr- OLM cross lammelar cluster1
/*Cell1 -> OLM2.Exc0 */    nc_append(n,   21+m, 0,  0.00001,1)

/*Cell1 -> OLM2.Exc0 */    nc_append(n,   33+m, 0,  0.00001,1)

/*Cell1 -> OLM2.Exc0 */    nc_append(n,   45+m, 0,  0.000008,1)

/*Cell1 -> OLM2.Exc0 */    nc_append(n,   57+m, 0,  0.000008,1)
}
}

///Pyr- OLM within lammelar cluster2
for n =12, 15{

//for n =12, 14{

///Pyr- bask within lammelar cluster2
/*Cell0 -> Bask0.Exc0 */  nc_append(n,   n+4, 0,  0.0008,0.3)


///Pyr- OLM within lammelar cluster2
for m=0,2{

/*Cell4 -> OLM2.Exc0 */ // nc_append(n,   21+m, 0,  0.0001,1)

///Pyr- OLM cross lammelar cluster2
/*Cell4 -> OLM2.Exc0 */ // nc_append(n,   9+m, 0,  0.00005,1)

/*Cell4 -> OLM2.Exc0 */ // nc_append(n,   33+m, 0,  0.00002,1)

/*Cell4 -> OLM2.Exc0 */ // nc_append(n,   45+m, 0,  0.00005,1)

/*Cell4 -> OLM2.Exc0 */ // nc_append(n,   57+m, 0,  0.00002,1)


/*Cell4 -> OLM2.Exc0 */  nc_append(n,   21+m, 0,  0.00002,1)

///Pyr- OLM cross lammelar cluster2
/*Cell4 -> OLM2.Exc0 */  nc_append(n,   9+m, 0,  0.000008,1)

/*Cell4 -> OLM2.Exc0 */  nc_append(n,   33+m, 0,  0.000003,1)

/*Cell4 -> OLM2.Exc0 */  nc_append(n,   45+m, 0,  0.000008,1)

/*Cell4 -> OLM2.Exc0 */  nc_append(n,   57+m, 0,  0.000003,1)
}
}

for n =24, 27{
//for n =24, 26{

///Pyr- bask within lammelar cluster3
/*Cell8 -> Bask8.Exc0 */  nc_append(n,   n+4, 0,  0.0008,0.3)


///Pyr- OLM within lammelar cluster3
for m=0,2{
/*Cell4 -> OLM2.Exc0 */  nc_append(n,   33+m, 0,  0.00002,1)

//Pyr- OLM cross lammelar cluster3
/*Cell4 -> OLM2.Exc0 */   nc_append(n,   9+m, 0,  0.000008,1)

/*Cell4 -> OLM2.Exc0 */  nc_append(n,   21+m, 0,  0.000003,1)

/*Cell4 -> OLM2.Exc0 */  nc_append(n,   45+m, 0,  0.000003,1)


/*Cell4 -> OLM2.Exc0 */  nc_append(n,   57+m, 0,  0.000008,1)
}
}
///cluster 4

for n =36, 39{
//for n =36, 38{

///Pyr- bask within lammelar cluster3
/*Cell8 -> Bask8.Exc0 */   nc_append(n,   n+4, 0,  0.0008,0.3)


///Pyr- OLM within lammelar cluster3

for m=0,2{
/*Cell4 -> OLM2.Exc0 */  nc_append(n,   45+m, 0,  0.00002,1)

//Pyr- OLM cross lammelar cluster3
/*Cell4 -> OLM2.Exc0 */   nc_append(n,   9+m, 0,  0.000008,1)

/*Cell4 -> OLM2.Exc0 */   nc_append(n,   21+m, 0,  0.000008,1)

/*Cell4 -> OLM2.Exc0 */   nc_append(n,   33+m, 0,  0.000003,1)

/*Cell4 -> OLM2.Exc0 */   nc_append(n,   57+m, 0,  0.000003,1)
}
}

//cluster 5
for n =48, 51{
//for n =48, 50{
///Pyr- bask within lammelar cluster3
/*Cell8 -> Bask8.Exc0 */  nc_append(n,   n+4, 0,  0.0008,0.3)


///Pyr- OLM within lammelar cluster3
for m=0,2{

/*Cell4 -> OLM2.Exc0 */  nc_append(n,   57+m, 0,  0.00002,1)

//Pyr- OLM cross lammelar cluster3
/*Cell4 -> OLM2.Exc0 */   nc_append(n,   9+m, 0,  0.000008,1)

/*Cell4 -> OLM2.Exc0 */   nc_append(n,   21+m, 0,  0.000003,1)

/*Cell4 -> OLM2.Exc0 */  nc_append(n,   33+m, 0,  0.000008,1)

/*Cell4 -> OLM2.Exc0 */   nc_append(n,   45+m, 0,  0.000003,1)
}
}


///Basket-Pyr in lammela
in1=totSyn 
for n= 0,3 {
/*Bask0 -> Exc1.Inh0 */ //  nc_append(n+4,   n, in1,  0.02,1)
/*Bask0 -> Exc1.Inh0 */ //  nc_append(n+16,  n+12, in1,  0.02,1)
/*Bask0 -> Exc1.Inh0 */  // nc_append(n+28,   n+ 24, in1,  0.02,1)
/*Bask0 -> Exc1.Inh0 */ //  nc_append(n+40,  n+36, in1,  0.02,1)
/*Bask0 -> Exc1.Inh0 */  // nc_append(n+52,   n+ 48, in1,  0.02,1)

/*Bask0 -> Exc1.Inh0 */  // nc_append(n+4,   n, in1,  0.015,1)
/*Bask0 -> Exc1.Inh0 */   nc_append(n+4,   n, in1,  0.015,0.3)
/*Bask0 -> Exc1.Inh0 */   nc_append(n+16,  n+12, in1,  0.015,0.3)
/*Bask0 -> Exc1.Inh0 */   nc_append(n+28,   n+ 24, in1,  0.015,0.3)
/*Bask0 -> Exc1.Inh0 */   nc_append(n+40,  n+36, in1,  0.015,0.3)
/*Bask0 -> Exc1.Inh0 */   nc_append(n+52,   n+ 48, in1,  0.015,0.3)



}


///distal OLM

for n=0,3 {

for m= 0, 2{

for k =0, 8{

///OLM-Pyr within lammelar cluster1
/*OLM0 -> Exc0.Inh0 */  // nc_append(9+m,   n, in1+1+9*m+k,  0.0005,1)
///OLM-Pyr cross lammelar cluster1
/*OLM0 -> Exc0.Inh0 */ //  nc_append(9+m,   n+12, in1+1+9*m+k,  0.0005,1)
/*OLM0 -> Exc0.Inh0 */ // nc_append(9+m,   n+ 24, in1+1+9*m+k,  0.0005,1)
/*OLM0 -> Exc0.Inh0 */ // nc_append(9+m,   n+36, in1+1+9*m+k,  0.0003,1)
/*OLM0 -> Exc0.Inh0 */ //  nc_append(9+m,   n+ 48, in1+1+9*m+k,  0.0003,1) 

/*OLM0 -> Exc0.Inh0 */  /// nc_append(9+m,   n, in1+1+9*m+k,  0.0007,1)
///OLM-Pyr cross lammelar cluster1
/*OLM0 -> Exc0.Inh0 */  /// nc_append(9+m,   n+12, in1+1+9*m+k,  0.0006,1)
/*OLM0 -> Exc0.Inh0 */ /// nc_append(9+m,   n+ 24, in1+1+9*m+k,  0.0006,1)
/*OLM0 -> Exc0.Inh0 */ /// nc_append(9+m,   n+36, in1+1+9*m+k,  0.0004,1)
/*OLM0 -> Exc0.Inh0 */ ///  nc_append(9+m,   n+ 48, in1+1+9*m+k,  0.0004,1) 

/*OLM0 -> Exc0.Inh0 */   nc_append(9+m,   n, in1+1+9*m+k,  0.0022,1)
///OLM-Pyr cross lammelar cluster1
/*OLM0 -> Exc0.Inh0 */   nc_append(9+m,   n+12, in1+1+9*m+k,  0.0015,1)
/*OLM0 -> Exc0.Inh0 */  nc_append(9+m,   n+ 24, in1+1+9*m+k,  0.0015,1)
/*OLM0 -> Exc0.Inh0 */  nc_append(9+m,   n+36, in1+1+9*m+k,  0.0012,1)
/*OLM0 -> Exc0.Inh0 */   nc_append(9+m,   n+ 48, in1+1+9*m+k,  0.0012,1) 


/// next 5 statements check if OLM is gone in 1 cluster
///OLM-Pyr within lammelar cluster1
/*OLM0 -> Exc0.Inh0 */  //// nc_append(10,   n, in1+1+k,  0,1)
///OLM-Pyr cross lammelar cluster1
/*OLM0 -> Exc0.Inh0 */  //// nc_append(10,   n+12, in1+1+k,  0,1)
/*OLM0 -> Exc0.Inh0 */ //// nc_append(10,   n+ 24, in1+1+k,  0,1)
/*OLM0 -> Exc0.Inh0 */ ////  nc_append(10,   n+36, in1+1+k,  0,1)
/*OLM0 -> Exc0.Inh0 */ //// nc_append(10,   n+ 48, in1+1+k,  0,1) 



///OLM-Pyr within lammelar cluster2
/*OLM0 -> Exc0.Inh0 */   nc_append(21+m,   n+12, in1+1+9*m+k,  0.0022,1) 
///OLM-Pyr cross lammelar cluster2
/*OLM0 -> Exc0.Inh0 */   nc_append(21+m,   n, in1+1+9*m+k,  0.0015,1)
//*OLM0 -> Exc0.Inh0 */   nc_append(21+m,   n+24, in1+1+9*m+k,  0.0012,1)
/*OLM0 -> Exc0.Inh0 */   nc_append(21+m,   n+36, in1+1+9*m+k,  0.0015,1)
//*OLM0 -> Exc0.Inh0 */   nc_append(21+m,   n+48, in1+1+9*m+k,  0.0012,1)

//OLM-Pyr within lammelar cluster3
/*OLM0 -> Exc0.Inh0 */   nc_append(33+m,   n+24, in1+1+9*m+k,  0.0022,1) 
//OLM-Pyr cross lammelar cluster3
/*OLM0 -> Exc0.Inh0 */   nc_append(33+m,   n+12, in1+1+9*m+k,  0.0012,1) 
/*OLM0 -> Exc0.Inh0 */   nc_append(33+m,   n, in1+1+9*m+k,  0.0015,1) 
/*OLM0 -> Exc0.Inh0 */   nc_append(33+m,   n+36, in1+1+9*m+k,  0.0012,1) 
/*OLM0 -> Exc0.Inh0 */   nc_append(33+m,   n+48, in1+1+9*m+k,  0.0015,1) 


//OLM-Pyr within lammelar cluster4
/*OLM0 -> Exc0.Inh0 */   nc_append(45+m,   n+36, in1+1+9*m+k,  0.0022,1) 
//OLM-Pyr cross lammelar cluster3
/*OLM0 -> Exc0.Inh0 */   nc_append(45+m,   n+12, in1+1+9*m+k,  0.0015,1) 
/*OLM0 -> Exc0.Inh0 */   nc_append(45+m,   n, in1+1+9*m+k,  0.0015,1)
/*OLM0 -> Exc0.Inh0 */   nc_append(45+m,   n+24, in1+1+9*m+k,  0.0012,1) 
/*OLM0 -> Exc0.Inh0 */   nc_append(45+m,   n+48, in1+1+9*m+k,  0.0012,1) 

//OLM-Pyr within lammelar cluster5
/*OLM0 -> Exc0.Inh0 */   nc_append(57+m,   n+48, in1+1+9*m+k,  0.0022,1) 
//OLM-Pyr cross lammelar cluster3
/*OLM0 -> Exc0.Inh0 */   nc_append(57+m,   n+12, in1+1+9*m+k,  0.0012,1) 
/*OLM0 -> Exc0.Inh0 */   nc_append(57+m,   n, in1+1+9*m+k,  0.0015,1) 
/*OLM0 -> Exc0.Inh0 */   nc_append(57+m,   n+24, in1+1+9*m+k,  0.0015,1) 
/*OLM0 -> Exc0.Inh0 */   nc_append(57+m,   n+36, in1+1+9*m+k,  0.0012,1) 

}
}
}

//// end network connectivity

vrec=0





proc intstimulus(){
//Intracellular current clamp at the soma based on user selected variables from control panel
// delay fixed at 50 ms
intdel=50
	access Cell_Cell[0].soma
        intstim.loc(0.5)
	intstim.del=intdel
	intstim.dur=intpw
	intstim.amp=Istim
}

proc intstimulus2(){//input cell N as argument
//Intracellular current clamp at the soma based on user selected variables from control panel

	access cells.object($1).soma
	intstim.loc(0.5)
	intstim.del=20
	intstim.dur=300
	intstim.amp=0.1
}





ncells=20

//objref  dis[ncells]
//objref di[ncells][ndend], dv[ncells][Nel]

///need to move const below to globals or extract from Cell_Cell
TWO_THIRD_APIDIST = 350 
USER5MAX = 76
APIDENDMAX = 74
BASDENDMAX = 43



//electric field stimulation
objref stim_amp, stim_time
stim_amp = new Vector()
stim_time = new Vector()

proc stim_waveform() { local i0, i1
  // this uses interpolated play
  // index    0  1    2    3        4
  // stim vec 0, 0,   1,   1,       0
  // time vec 0, DEL, DEL, DEL+DUR, DEL+DUR
  //  really  0, $1,  $1,  $1+$2,   $1+$2
  // first the stim vector
  stim_amp.resize(5)
  stim_amp.fill(0)
  stim_amp.x[2]=1
  stim_amp.x[3]=1
  stim_amp.mul($3)

stim_time.resize(5)
  stim_time.x[1]=$1
  stim_time.x[2]=$1
  stim_time.x[3]=$1+$2
  stim_time.x[4]=$1+$2
}


proc attach_stim() {
// since is_xtra is GLOBAL, we only need to specify Vector.play()
// for one point along each section of the model
forsec Cell_Cell[0].all {

    if (ismembrane("xtra")) {
psection()
// print "stim inserted"

stim_amp.play(&is_xtra, stim_time)

    }
 
}
forsec Cell_Cell[1].all {


    if (ismembrane("xtra")) {

psection()
// print "stim inserted"

stim_amp.play(&is_xtra, stim_time)

    }
 
}

}


proc setstim() {
  del = $1
  dur = $2
  amp = $3
  stim_waveform(del, dur, amp)
  attach_stim()
}


proc advance(){				
// At each time step, the extracellular voltage for each segments ends and midpoints are taken from mobj
									
fadvance()


}
//End advance


//check if need this for all cells
Cell_Cell[0].maxn3d()


//setstim(10, 200, 0.06)
//changed 9/12/09
setstim(10, pw, 0.06)



finitialize(Vrest)
if (cvode.active()) { cvode.re_init() }else{ fcurrent() } 
vrec = Cell_Cell[0].fieldrec1()

Cell_Cell[0].pasinit()
///checkthis
Cell_Cell[1].pasinit()
Cell_Cell[2].pasinit()
Cell_Cell[3].pasinit()



load_file("CurRun.ses")
load_file("GraphandElf.ses")


//access acell_home_


